PsychoPy2experiment version="2020.2.4post1"
Settings
  Data file delimiter = comma
  Experiment info = {'participant': 's_001', 'ori': '10'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = use prefs
  Window size (pixels) = [2496, 1664]
  expName = ContrastDetection
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Routines
  Routine trial
    GratingComponent fixation
      color = [1, 1, 1]
      durationEstim = 0.55
      mask = none
      sf = 1
      size = [25, 25]
      startEstim = 0.0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.55
      tex = none
      texture resolution = 512
      units = pix
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    GratingComponent gabor
      color [set every repeat] = $[level, level, level]
      durationEstim = .5
      mask = gauss
      ori = $expInfo['ori']
      phase [set every frame] = $trialClock.getTime()*2
      sf = 0.025
      size = [1024,1024]
      startEstim = 0.5
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.55
      tex = sin
      texture resolution = 512
      units = pix
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    KeyboardComponent resp
      allowedKeys = 'up', 'down'
      correctAns = up
      forceEndRoutine = False
      startVal [time (s)] = 0.6
      stopVal [duration (s)] = 2.0
      storeCorrect = True
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  Routine instr
    TextComponent instructions
      color = [1, 1, 1]
      font = Atkinson Hyperlegible
      letterHeight = 0.1
      startVal [time (s)] = 0
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      text:
        Press 'up' if you see the stimulus, 'down' if you didn't.

        Any key to start
    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
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Flow
  Routine instr
  LoopInitiator trials loopType="StairHandler"
    N down = 3
    N reversals = 1
    N up = 1
    loopType = staircase
    max value = 1
    min value = 0
    nReps = 30
    start value = 0.9
    step sizes = [1,1,0.9,0.8,0.8,0.7, 0.7,0.6, 0.6,0.5, 0.4,0.4,0.2]
    step type = log
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    Routine trial
  LoopTerminator trials
